folder = "Z:\\Jesse\\MFM\\20190315\\Deconvolution\\"
list=getFileList(folder);

for(i=0;i<list.length;i++){
	if(endsWith(list[i],"__Ch2.h5")){
			
		run("Scriptable load HDF5...", "load=" + list[i] + " datasetnames=/time0001,/time0002,/time0003,/time0004,/time0005,/time0006,/time0007,/time0008,/time0009,/time0010,/time0011,/time0012,/time0013,/time0014,/time0015,/time0016,/time0017,/time0018,/time0019,/time0020,/time0021,/time0022,/time0023,/time0024,/time0025,/time0026,/time0027,/time0028,/time0029,/time0030,/time0031,/time0032,/time0033,/time0034,/time0035,/time0036,/time0037,/time0038,/time0039,/time0040,/time0041,/time0042,/time0043,/time0044,/time0045,/time0046,/time0047,/time0048,/time0049,/time0050,/time0051,/time0052,/time0053,/time0054,/time0055,/time0056,/time0057,/time0058,/time0059,/time0060,/time0061,/time0062,/time0063,/time0064,/time0065,/time0066,/time0067,/time0068,/time0069,/time0070,/time0071,/time0072,/time0073,/time0074,/time0075,/time0076,/time0077,/time0078,/time0079,/time0080,/time0081,/time0082,/time0083,/time0084,/time0085,/time0086,/time0087,/time0088,/time0089,/time0090,/time0091,/time0092,/time0093,/time0094,/time0095,/time0096,/time0097,/time0098,/time0099,/time0100,/time0101,/time0102,/time0103,/time0104,/time0105,/time0106,/time0107,/time0108,/time0109,/time0110,/time0111,/time0112,/time0113,/time0114,/time0115,/time0116,/time0117,/time0118,/time0119,/time0120,/time0121,/time0122,/time0123,/time0124,/time0125,/time0126,/time0127,/time0128,/time0129,/time0130,/time0131,/time0132,/time0133,/time0134,/time0135,/time0136,/time0137,/time0138,/time0139,/time0140,/time0141,/time0142,/time0143,/time0144,/time0145,/time0146,/time0147,/time0148,/time0149,/time0150,/time0151,/time0152,/time0153,/time0154,/time0155,/time0156,/time0157,/time0158,/time0159,/time0160,/time0161,/time0162,/time0163,/time0164,/time0165,/time0166,/time0167,/time0168,/time0169,/time0170,/time0171,/time0172,/time0173,/time0174,/time0175,/time0176,/time0177,/time0178,/time0179,/time0180,/time0181,/time0182,/time0183,/time0184,/time0185,/time0186,/time0187,/time0188,/time0189,/time0190,/time0191,/time0192,/time0193,/time0194,/time0195,/time0196,/time0197,/time0198,/time0199,/time0200,/time0201,/time0202,/time0203,/time0204,/time0205,/time0206,/time0207,/time0208,/time0209,/time0210,/time0211,/time0212,/time0213,/time0214,/time0215,/time0216,/time0217,/time0218,/time0219,/time0220,/time0221,/time0222,/time0223,/time0224,/time0225,/time0226,/time0227,/time0228,/time0229,/time0230,/time0231,/time0232,/time0233,/time0234,/time0235,/time0236,/time0237,/time0238,/time0239,/time0240,/time0241,/time0242,/time0243,/time0244,/time0245,/time0246,/time0247,/time0248,/time0249,/time0250,/time0251,/time0252,/time0253,/time0254,/time0255,/time0256,/time0257,/time0258,/time0259,/time0260,/time0261,/time0262,/time0263,/time0264,/time0265,/time0266,/time0267,/time0268,/time0269,/time0270,/time0271,/time0272,/time0273,/time0274,/time0275,/time0276,/time0277,/time0278,/time0279,/time0280,/time0281,/time0282,/time0283,/time0284,/time0285,/time0286,/time0287,/time0288,/time0289,/time0290,/time0291,/time0292,/time0293,/time0294,/time0295,/time0296,/time0297,/time0298,/time0299,/time0300,/time0301,/time0302,/time0303,/time0304,/time0305,/time0306,/time0307,/time0308,/time0309,/time0310,/time0311,/time0312,/time0313,/time0314,/time0315,/time0316,/time0317,/time0318,/time0319,/time0320,/time0321,/time0322,/time0323,/time0324,/time0325,/time0326,/time0327,/time0328,/time0329,/time0330,/time0331,/time0332,/time0333,/time0334,/time0335,/time0336,/time0337,/time0338,/time0339,/time0340,/time0341,/time0342,/time0343,/time0344,/time0345,/time0346,/time0347,/time0348,/time0349,/time0350,/time0351,/time0352,/time0353,/time0354,/time0355,/time0356,/time0357,/time0358,/time0359,/time0360,/time0361,/time0362,/time0363,/time0364,/time0365,/time0366,/time0367,/time0368,/time0369,/time0370,/time0371,/time0372,/time0373,/time0374,/time0375,/time0376,/time0377,/time0378,/time0379,/time0380,/time0381,/time0382,/time0383,/time0384,/time0385,/time0386,/time0387,/time0388,/time0389,/time0390,/time0391,/time0392,/time0393,/time0394,/time0395,/time0396,/time0397,/time0398,/time0399,/time0400,/time0401,/time0402,/time0403,/time0404,/time0405,/time0406,/time0407,/time0408,/time0409,/time0410,/time0411,/time0412,/time0413,/time0414,/time0415,/time0416,/time0417,/time0418,/time0419,/time0420,/time0421,/time0422,/time0423,/time0424,/time0425,/time0426,/time0427,/time0428,/time0429,/time0430,/time0431,/time0432,/time0433,/time0434,/time0435,/time0436,/time0437,/time0438,/time0439,/time0440,/time0441,/time0442,/time0443,/time0444,/time0445,/time0446,/time0447,/time0448,/time0449,/time0450,/time0451,/time0452,/time0453,/time0454,/time0455,/time0456,/time0457,/time0458,/time0459,/time0460,/time0461,/time0462,/time0463,/time0464,/time0465,/time0466,/time0467,/time0468,/time0469,/time0470,/time0471,/time0472,/time0473,/time0474,/time0475,/time0476,/time0477,/time0478,/time0479,/time0480,/time0481,/time0482,/time0483,/time0484,/time0485,/time0486,/time0487,/time0488,/time0489,/time0490,/time0491,/time0492,/time0493,/time0494,/time0495,/time0496,/time0497,/time0498,/time0499,/time0500,/time0501,/time0502,/time0503,/time0504,/time0505,/time0506,/time0507,/time0508,/time0509,/time0510,/time0511,/time0512,/time0513,/time0514,/time0515,/time0516,/time0517,/time0518,/time0519,/time0520,/time0521,/time0522,/time0523,/time0524,/time0525,/time0526,/time0527,/time0528,/time0529,/time0530,/time0531,/time0532,/time0533,/time0534,/time0535,/time0536,/time0537,/time0538,/time0539,/time0540,/time0541,/time0542,/time0543,/time0544,/time0545,/time0546,/time0547,/time0548,/time0549,/time0550,/time0551,/time0552,/time0553,/time0554,/time0555,/time0556,/time0557,/time0558,/time0559,/time0560,/time0561,/time0562,/time0563,/time0564,/time0565,/time0566,/time0567,/time0568,/time0569,/time0570,/time0571,/time0572,/time0573,/time0574,/time0575,/time0576,/time0577,/time0578,/time0579,/time0580,/time0581,/time0582,/time0583,/time0584,/time0585,/time0586,/time0587,/time0588,/time0589,/time0590,/time0591,/time0592,/time0593,/time0594,/time0595,/time0596,/time0597,/time0598,/time0599,/time0600,/time0601,/time0602,/time0603,/time0604,/time0605,/time0606,/time0607,/time0608,/time0609,/time0610,/time0611,/time0612,/time0613,/time0614,/time0615,/time0616,/time0617,/time0618,/time0619,/time0620,/time0621,/time0622,/time0623,/time0624,/time0625,/time0626,/time0627,/time0628,/time0629,/time0630,/time0631,/time0632,/time0633,/time0634,/time0635,/time0636,/time0637,/time0638,/time0639,/time0640,/time0641,/time0642,/time0643,/time0644,/time0645,/time0646,/time0647,/time0648,/time0649,/time0650,/time0651,/time0652,/time0653,/time0654,/time0655,/time0656,/time0657,/time0658,/time0659,/time0660,/time0661,/time0662,/time0663,/time0664,/time0665,/time0666,/time0667,/time0668,/time0669,/time0670,/time0671,/time0672,/time0673,/time0674,/time0675,/time0676,/time0677,/time0678,/time0679,/time0680,/time0681,/time0682,/time0683,/time0684,/time0685,/time0686,/time0687,/time0688,/time0689,/time0690,/time0691,/time0692,/time0693,/time0694,/time0695,/time0696,/time0697,/time0698,/time0699,/time0700,/time0701,/time0702,/time0703,/time0704,/time0705,/time0706,/time0707,/time0708,/time0709,/time0710,/time0711,/time0712,/time0713,/time0714,/time0715,/time0716,/time0717,/time0718,/time0719,/time0720,/time0721,/time0722,/time0723,/time0724,/time0725,/time0726,/time0727,/time0728,/time0729,/time0730,/time0731,/time0732,/time0733,/time0734,/time0735,/time0736,/time0737,/time0738,/time0739,/time0740,/time0741,/time0742,/time0743,/time0744,/time0745,/time0746,/time0747,/time0748,/time0749,/time0750,/time0751,/time0752,/time0753,/time0754,/time0755,/time0756,/time0757,/time0758,/time0759,/time0760,/time0761,/time0762,/time0763,/time0764,/time0765,/time0766,/time0767,/time0768,/time0769,/time0770,/time0771,/time0772,/time0773,/time0774,/time0775,/time0776,/time0777,/time0778,/time0779,/time0780,/time0781,/time0782,/time0783,/time0784,/time0785,/time0786,/time0787,/time0788,/time0789,/time0790,/time0791,/time0792,/time0793,/time0794,/time0795,/time0796,/time0797,/time0798,/time0799,/time0800,/time0801,/time0802,/time0803,/time0804,/time0805,/time0806,/time0807,/time0808,/time0809,/time0810,/time0811,/time0812,/time0813,/time0814,/time0815,/time0816,/time0817,/time0818,/time0819,/time0820,/time0821,/time0822,/time0823,/time0824,/time0825,/time0826,/time0827,/time0828,/time0829,/time0830,/time0831,/time0832,/time0833,/time0834,/time0835,/time0836,/time0837,/time0838,/time0839,/time0840,/time0841,/time0842,/time0843,/time0844,/time0845,/time0846,/time0847,/time0848,/time0849,/time0850,/time0851,/time0852,/time0853,/time0854,/time0855,/time0856,/time0857,/time0858,/time0859,/time0860,/time0861,/time0862,/time0863,/time0864,/time0865,/time0866,/time0867,/time0868,/time0869,/time0870,/time0871,/time0872,/time0873,/time0874,/time0875,/time0876,/time0877,/time0878,/time0879,/time0880,/time0881,/time0882,/time0883,/time0884,/time0885,/time0886,/time0887,/time0888,/time0889,/time0890,/time0891,/time0892,/time0893,/time0894,/time0895,/time0896,/time0897,/time0898,/time0899,/time0900,/time0901,/time0902,/time0903,/time0904,/time0905,/time0906,/time0907,/time0908,/time0909,/time0910,/time0911,/time0912,/time0913,/time0914,/time0915,/time0916,/time0917,/time0918,/time0919,/time0920,/time0921,/time0922,/time0923,/time0924,/time0925,/time0926,/time0927,/time0928,/time0929,/time0930,/time0931,/time0932,/time0933,/time0934,/time0935,/time0936,/time0937,/time0938,/time0939,/time0940,/time0941,/time0942,/time0943,/time0944,/time0945,/time0946,/time0947,/time0948,/time0949,/time0950,/time0951,/time0952,/time0953,/time0954,/time0955,/time0956,/time0957,/time0958,/time0959,/time0960,/time0961,/time0962,/time0963,/time0964,/time0965,/time0966,/time0967,/time0968,/time0969,/time0970,/time0971,/time0972,/time0973,/time0974,/time0975,/time0976,/time0977,/time0978,/time0979,/time0980,/time0981,/time0982,/time0983,/time0984,/time0985,/time0986,/time0987,/time0988,/time0989,/time0990,/time0991,/time0992,/time0993,/time0994,/time0995,/time0996,/time0997,/time0998,/time0999,/time1000,/time1001,/time1002,/time1003,/time1004,/time1005,/time1006,/time1007,/time1008,/time1009,/time1010,/time1011,/time1012,/time1013,/time1014,/time1015,/time1016,/time1017,/time1018,/time1019,/time1020,/time1021,/time1022,/time1023,/time1024,/time1025,/time1026,/time1027,/time1028,/time1029,/time1030,/time1031,/time1032,/time1033,/time1034,/time1035,/time1036,/time1037,/time1038,/time1039,/time1040,/time1041,/time1042,/time1043,/time1044,/time1045,/time1046,/time1047,/time1048,/time1049,/time1050,/time1051,/time1052,/time1053,/time1054,/time1055,/time1056,/time1057,/time1058,/time1059,/time1060,/time1061,/time1062,/time1063,/time1064,/time1065,/time1066,/time1067,/time1068,/time1069,/time1070,/time1071,/time1072,/time1073,/time1074,/time1075,/time1076,/time1077,/time1078,/time1079,/time1080,/time1081,/time1082,/time1083,/time1084,/time1085,/time1086,/time1087,/time1088,/time1089,/time1090,/time1091,/time1092,/time1093,/time1094,/time1095,/time1096,/time1097,/time1098,/time1099,/time1100,/time1101,/time1102,/time1103,/time1104,/time1105,/time1106,/time1107,/time1108,/time1109,/time1110,/time1111,/time1112,/time1113,/time1114,/time1115,/time1116,/time1117,/time1118,/time1119,/time1120,/time1121,/time1122,/time1123,/time1124,/time1125,/time1126,/time1127,/time1128,/time1129,/time1130,/time1131,/time1132,/time1133,/time1134,/time1135,/time1136,/time1137,/time1138,/time1139,/time1140,/time1141,/time1142,/time1143,/time1144,/time1145,/time1146,/time1147,/time1148,/time1149,/time1150,/time1151,/time1152,/time1153,/time1154,/time1155,/time1156,/time1157,/time1158,/time1159,/time1160,/time1161,/time1162,/time1163,/time1164,/time1165,/time1166,/time1167,/time1168,/time1169,/time1170,/time1171,/time1172,/time1173,/time1174,/time1175,/time1176,/time1177,/time1178,/time1179,/time1180,/time1181,/time1182,/time1183,/time1184,/time1185,/time1186,/time1187,/time1188,/time1189,/time1190,/time1191,/time1192,/time1193,/time1194,/time1195,/time1196,/time1197,/time1198,/time1199,/time1200,/time1201,/time1202,/time1203,/time1204,/time1205,/time1206,/time1207,/time1208,/time1209,/time1210,/time1211,/time1212,/time1213,/time1214,/time1215,/time1216,/time1217,/time1218,/time1219,/time1220,/time1221,/time1222,/time1223,/time1224,/time1225,/time1226,/time1227,/time1228,/time1229,/time1230,/time1231,/time1232,/time1233,/time1234,/time1235,/time1236,/time1237,/time1238,/time1239,/time1240,/time1241,/time1242,/time1243,/time1244,/time1245,/time1246,/time1247,/time1248,/time1249,/time1250,/time1251,/time1252,/time1253,/time1254,/time1255,/time1256,/time1257,/time1258,/time1259,/time1260,/time1261,/time1262,/time1263,/time1264,/time1265,/time1266,/time1267,/time1268,/time1269,/time1270,/time1271,/time1272,/time1273,/time1274,/time1275,/time1276,/time1277,/time1278,/time1279,/time1280,/time1281,/time1282,/time1283,/time1284,/time1285,/time1286,/time1287,/time1288,/time1289,/time1290,/time1291,/time1292,/time1293,/time1294,/time1295,/time1296 nframes=1290 nchannels=1");
	
		getDimensions(width, height, channels, slices, frames);
		if (Stack.isHyperstack){
			run("Make Substack...", "  slices=1-9 frames=50-"+frames+"-100");
		} else {
			run("Make Substack...", "  slices=50-"+slices+"-100");
		}
		file = File.getName(list[i]);
		file2 = split(file,'.');
		file2 = file[0];
		saveAs("Tiff",folder+file2+"substack.tif");
		close();
		close();
	}
}